###################################################################
###################### BGO CRYSTAL ################################
###################################################################


sv:Ma/BGO/Components 						 = 3 "Bismuth" "Germanium" "Oxygen"
uv:Ma/BGO/Fractions  						 = 3  0.6710 0.1749 0.1541
d:Ma/BGO/Density    						 = 7.13 g/cm3
s:Ma/BGO/DefaultColor						 = "yellow"
d:Ma/BGO/ScintillationYield     			 = 8500 /MeV
u:Ma/BGO/ResolutionScale  					 = 1.0
d:Ma/BGO/ScintillationTimeConstant1 		 = 1.0 ns
u:Ma/BGO/YieldRatio 						 = 1.0
dv:Ma/BGO/RIndex/Energies       			 = 22 1.70174 1.77366 1.85541 1.94125 2.03686 2.27506 2.30503 2.39026 2.4234 2.45544 2.53941 2.64815 2.67683 2.73866 2.77454 2.81679 2.85486 2.94883 3.08777 3.28102 3.35631 3.44381 eV
uv:Ma/BGO/RIndex/Values         			 = 22 2.06 2.06 2.06 2.07 2.07 2.09 2.09 2.1 2.1 2.11 2.12 2.13 2.13 2.14 2.15 2.16 2.16 2.18 2.21 2.26 2.29 2.32
dv:Ma/BGO/ScintillationComponent1/Energies   = 157 1.94478 1.95083 1.9576 1.96509 1.97265 1.98027 1.98795 1.99568 2.00347 2.01061 2.01853 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3.30594 eV
uv:Ma/BGO/ScintillationComponent1/Values     = 157 0.109291 0.11811 0.124409 0.133228 0.143307 0.153386 0.163465 0.172283 0.183622 0.192441 0.20378 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0.012723


###############################################################
####################### Superficie Reflectiva #################
###############################################################

s:Su/Reflective_Surface/Type                   = "dielectric_metal"
s:Su/Reflective_Surface/Finish                 = "polished"
s:Su/Reflective_Surface/Model                  = "unified"
dv:Su/Reflective_Surface/Reflectivity/Energies = 157 1.94478 1.95083 1.9576 1.96509 1.97265 1.98027 1.98795 1.99568 2.00347 2.01061 2.01853 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3.30594 eV
uv:Su/Reflective_Surface/Reflectivity/Values   = 157 0.8437 0.84366 0.8437 0.84366 0.84361 0.84355 0.8435 0.84346 0.84343 0.84342 0.84343 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0.8872



# Surface used to detect optical photons
s:Su/SurfaceDetector/Type                	  = "dielectric_metal"
s:Su/SurfaceDetector/Finish              	  = "polished"
s:Su/SurfaceDetector/Model               	  = "unified"
dv:Su/SurfaceDetector/Efficiency/Energies     = 157 1.94478 1.95083 1.9576 1.96509 1.97265 1.98027 1.98795 1.99568 2.00347 2.01061 2.01853 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3.30594 eV
uv:Su/SurfaceDetector/Efficiency/Values       = 157 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 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1.0
dv:Su/SurfaceDetector/Reflectivity/Energies   = 157 1.94478 1.95083 1.9576 1.96509 1.97265 1.98027 1.98795 1.99568 2.00347 2.01061 2.01853 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3.30594 eV
uv:Su/SurfaceDetector/Reflectivity/Values     = 157 0.0 0.0 0.0 0.0 0.0 0.0 0.0 0.0 0.0 0.0 0.0 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0.0


###########################################
########## Mylar ##########################
###########################################

sv:Ma/Mylar/Components    = 3 "Hydrogen" "Carbon" "Oxygen"
uv:Ma/Mylar/Fractions     = 3 0.041959 0.625017 0.333025
d:Ma/Mylar/Density        = 1.40 g/cm3
s:Ma/Mylar/DefaultColor   = "red"
